# motoneuron6c.ode: the 6-compartment spinal motoneuron of Moustafa et al. 2023,
# "Bifurcation analysis of spinal motoneuron firing behaviour" (soma, axon hillock and
# four dendrites; 25 states), current-clamped through ampPar (stimulus 50 * ampPar nA * 1e-6).
#
# Source: ModelDB 267710 at archive commit 2dd9ba299e56c3f2962f883afaada5a899c4e3f6,
# "XPPAUT Model/6cModel Xppaut": rest.ode (main.ode with @ total=600, the README's step 2,
# integration to the steady state) with its 19 include files inlined in the source's order,
# each marked by a "# ---- file ----" line.
# Staging edits (nothing else changed):
#   @ OUTPUT=output.dat   (opt.inc wrote ../simulations/xpp.dat, outside the model's folder)
#   @ total=600           (rest.ode's)
#   par CaDen_Max         (glob.inc's fixed CaDen_Max=0.000168, the dendritic L-type Ca / PIC
#                          density scaling both distal dendrites' Ca and Ca-activated K, is a
#                          parameter, the second one of the Hopf locus in tests/auto/)

## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##


dvs/dt=(I/sArea+Is)/CM
dvah/dt=(Iah)/CM
dvd0/dt=(Id0)/CM
dvd1/dt=(Id1)/CM
dvd2/dt=(Id2)/CM
dvd3/dt=(Id3)/CM

# ---- glob.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

#### global constants ####
par ampPar=0

TEMP=36
CM=0.001
Ra=70
vtraub=-10
vtraub2=-70
tadj=3^((TEMP-36)/10)
tadj20=3^((TEMP-36)/10)
tadj23=3^((TEMP-36)/10)
FARADAY=96484.56
R=8.31441
par CaDen_Max=0.000168

#done
# ---- func.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

### functions ###
Area(l,diam)=pi*l*diam
CArea(diam)=0.25*pi*diam^(2)
dAtx(d0,df,x)=d0+x*(df-d0)
F_Area(r1,r2,h)=pi*(r1+r2)*((r1-r2)^(2)+h^(2))^(0.5)
expmod(x)=if(x<(-100))then(0)else(exp(x))
vtrap(x,y)=if(abs(x/y) < 1e-6)then(y*(1 - x/y/2))else(x/(expmod(x/y) - 1))
vtrap1(x,a,b,c)=if(abs((x+b)/c)< 1e-6)then(a*c)else((a*(x+b))/(1-exp(-(x+b)/c)))
vtrap2(x,a,b,c)=if(abs((x+b)/c)< 1e-6)then(-a*c)else((a*(-(x+b)))/(1-exp((x+b)/c)))
tauFunc(tail,w,df,wth)=0.001+0.999/(1+exp((tail*w*df-wth)/0.006))
d_Flag(x)=1/(1+expmod(5000*(x+0.01)))

#done
# ---- soma.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

####### soma ########
sLen=48.8*10^(-4)
sDiam=48.8*10^(-4)
sArea=Area(sLen,sDiam)
sCArea=CArea(sDiam)
sGPas=1/225
sEPas=-70
######################
##### Ion Channels ###
# ---- soma_NafSmb1.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

##### NafSmb1
NaS_gb=0.06
NaS_amA=22
NaS_bmA=46
NaS_th=40
NaS_tht=47
NaS_kap=7
NaS_e=50

NaS_g=NaS_gb*NaS_m^(3)*NaS_h
v2=vs-vtraub
v22=vs-vtraub2

Nas_a=0.4*vtrap(NaS_amA-v22,5)
Nas_b=0.4*vtrap(v22-NaS_bmA,5)

Nas_mt=1/(Nas_a+Nas_b)/tadj
Nas_mf=Nas_a/(Nas_a+Nas_b)

Nas_ht=(NaS_th*tadj)/(expmod((v2+50)/15)+expmod(-(v2+50)/16))
Nas_hf=1/(1+expmod((v2+NaS_tht)/NaS_kap))
#######################

######################
##### Currents #######
IsNas=NaS_g*(vs-NaS_e)
######################

######################
##### equations ######
dNas_m/dt=(Nas_mf-Nas_m)/Nas_mt
dNas_h/dt=(Nas_hf-Nas_h)/Nas_ht
######################

######################
#### init values #####
init Nas_m=0.00590903, Nas_h=0.864964
######################

#done
# ---- soma_KdrSmb1.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

### KdrSmb1
Kdr_gb=0.80048
Kdr_tn=5
Kdr_tht=20
Kdr_kap=-15
Kdr_e=-80

Kdr_g=Kdr_gb*Kdr_n^(4)
Kdr_nt=(Kdr_tn*tadj)/(expmod((v2+40)/40)+expmod(-(v2+40)/50))
Kdr_nf=1/(1+expmod((v2+Kdr_tht)/Kdr_kap))
########################

######################
##### Currents #######
IsKdr=Kdr_g*(vs-Kdr_e)
######################

######################
##### equations ######
dKdr_n/dt=(Kdr_nf-Kdr_n)/Kdr_nt
######################

######################
#### init values #####
init Kdr_n=0.0649692
######################

#done
# ---- soma_CaSmb1.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

## CaSmb1
#### N Type ###
Ca_gnb=0.01
Ca_tmn=15
Ca_thtmn=14

Ca_thn=50
Ca_ththn=32
#### L Type ###
Ca_glb=0
mlexp= 1
Ca_tml=400
Ca_thtml=45.8
kml=-3.7

### Ca activated K
Ca_gkb=0.0221
Ca_nexp=1
Ca_kd=0.0005

cao=2
f=0.01
alpha=1
kca=8

Ca_ek=-80
Ca_v2=vs-vtraub

Ca_e=130
Ca_gn=Ca_gnb*Ca_mn^(2)*Ca_hn
Ca_gl=Ca_glb*(Ca_ml^mlexp)
Ca_gk=Ca_gkb*((CaI^Ca_nexp)/((CaI^Ca_nexp)+Ca_kd))

Ca_mnt=Ca_tmn*tadj
Ca_mnf=1/(1+exp((Ca_v2+Ca_thtmn)/(-5)))

Ca_hnt=Ca_thn*tadj
Ca_hnf=1/(1+exp((Ca_v2+Ca_ththn)/5))

Ca_mlt=Ca_tml*tadj
Ca_mlf=1/(1+exp((Ca_v2+Ca_thtml)/kml))
######################

######################
##### Currents #######
IsCaN=Ca_gn*(vs-Ca_e)
IsCaL=Ca_gl*(vs-Ca_e)
IsCaK=Ca_gk*(vs-Ca_ek)
IsCa=IsCaN+IsCaL+IsCaK
######################

######################
##### equations ######
dCa_mn/dt=(Ca_mnf-Ca_mn)/Ca_mnt
dCa_hn/dt=(Ca_hnf-Ca_hn)/Ca_hnt
dCa_ml/dt=(Ca_mlf-Ca_ml)/Ca_mlt
dCaI/dt=f*(-(alpha*(IsCaN+IsCaL))-(kca*CaI))
######################

######################
#### init values #####
init Ca_mn=0.000101029,Ca_hn=0.996316,Ca_ml=0.0210859,CaI=0.0001
######################

#done
######################

######################
##### Currents #######
IsL=sGPas*(vs-sEPas)
IsIon=IsL+IsNas+IsKdr+IsCa
IsComp=1/sArea*(G_S_Ah*(vah-vs)+G_S_d0*(vd0-vs))
Is=IsComp-IsIon
######################

######################
##### equations ######
# dvs/dt=(I/sArea+Is)/CM    Written in the main File
######################

######################
#### init values #####
init vs=-70
######################

#done
# ---- ah.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

#### Axon Hillock ####
ahLen=20*10^(-4)
ahDiam=12.94999838*10^(-4)
ahArea=Area(ahLen,ahDiam)
ahCArea=CArea(ahDiam)
ahGPas=1/225
ahEPas=-70
######################

########## Axon Hilloc Channels ########
########################################
# ---- ah_NafIsb1.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

######## NafIsb1 ######
NaI_gb=1.3392
NaI_e=50.0
NaI_amA=18
NaI_bmA=38
NaI_th=40
NaI_tht=47
NaI_kap=7

NaI_g=NaI_gb*NaI_m^(3)*NaI_h

Ah_v2=vah-vtraub
Ah_v22=vah-vtraub2

NaI_a=0.4*vtrap(NaI_amA-Ah_v22,5)
NaI_b=0.4*vtrap(Ah_v22-NaI_bmA,5)

NaI_mt=1/(NaI_a+NaI_b)/tadj20
NaI_mf=NaI_a/(NaI_a+NaI_b)

NaI_ht=(NaI_th*tadj20)/(exp((Ah_v2+50)/15)+exp(-(Ah_v2+50)/16))
NaI_hf=1/(1+exp((Ah_v2+NaI_tht)/NaI_kap))

########################################

######################
##### Currents #######
IahNaI=NaI_g*(vah-NaI_e)
######################

#### state equations ####
dNaI_m/dt=(NaI_mf-NaI_m)/NaI_mt
dNaI_h/dt=(NaI_hf-NaI_h)/NaI_ht
######################

######################
#### init values #####
init NaI_m=0.0131252, NaI_h=0.864964
######################

#done
# ---- ah_NapIsb1.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

######## NapIsb1 ######
NaP_gb=3.2971e-5
NaP_e=50.0
vtraub1=10
NaP_ampA=0.01
NaP_ampB=30.4
NaP_ampC=5
NaP_bmpA=0.00025
NaP_bmpB=34.7
NaP_bmpC=5

NaP_g=NaP_gb*NaP_mp^(3)

tadj1=2.2^((TEMP-20)/10)
NaP_v1=vah-vtraub1
NaP_a=vtrap1(NaP_v1,NaP_ampA,NaP_ampB,NaP_ampC)
NaP_b=vtrap2(NaP_v1,NaP_bmpA,NaP_bmpB,NaP_bmpC)
NaP_mpt=1/(NaP_a+NaP_b)/tadj1
NaP_mpf=NaP_a/(NaP_a+NaP_b)
#########################

######################
##### Currents #######
IahNaP=NaP_g*(vah-NaP_e)
######################

#### state equations ####
dNap_mp/dt=(Nap_mpf-Nap_mp)/Nap_mpt
######################

######################
#### init values #####
init NaP_mp=0.00214921
######################

#done
# ---- ah_KdrIsb1.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

##### KdrIsb1 ###########
KI_gb=0.16552
KI_e=-80.0
KI_tht=20
KI_kap=-15
KI_tn=5

KI_g=KI_gb*KI_n^(4)

## subtract vtraub which is equal -10 not vtraub2
KI_v2=vah-vtraub

KI_nt=(KI_tn*tadj20)/(exp((KI_v2+40)/40)+exp(-(KI_v2+40)/50))
KI_nf=1/(1+exp((KI_v2+KI_tht)/KI_kap))
########################################

######################
##### Currents #######
IahKI=KI_g*(vah-KI_e)
######################

#### state equations ####
dKI_n/dt=(KI_nf-KI_n)/KI_nt
######################

#### init values #####
init KI_n=0.0649692
######################

#done
########################################

##### Currents #######
IahL=ahGPas*(vah-ahEPas)
IahIon=IahL+IahKI+IahNaP+IahNaI
IahComp=1/ahArea*(G_S_Ah*(vs-vah))
Iah=IahComp-IahIon
######################

######################
#### state equations ####
# dvah/dt=(Iah)/CM
######################

######################
#### init values #####
init vah=-70
######################

#done
# ---- dend0.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

##### Dendrite 0 #####
d0Len=1450.97*10^(-4)
d0Diam=42.2188*10^(-4)
d0Area=Area(d0Len,d0Diam)
d0CArea=CArea(d0Diam)
d0GPas=1/11000
d0EPas=-70
######################

######################
##### Ion Channels ###
######################

######################
##### Currents #######
Id0L=d0GPas*(vd0-d0EPas)
Id0Ion=Id0L
Id0Comp=1/d0Area*(G_S_d0*(vs-vd0)+G_d0_d1*(vd1-vd0))
Id0=Id0Comp-Id0Ion
######################

######################
#### init values #####
init vd0=-70
######################
#done
# ---- dend1.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

##### Dendrite 1 #####
d1Len=1450.97*10^(-4)
d1Diam=42.2188*10^(-4)
d1Area=Area(d1Len,d1Diam)
d1CArea=CArea(d1Diam)
d1GPas=1/11000
d1EPas=-70

######################
##### Ion Channels ###
######################

######################
##### Current ####
Id1L=d1GPas*(vd1-d1EPas)
Id1Ion=Id1L
Id1Comp=1/d1Area*(G_d0_d1*(vd0-vd1)+G_d1_d2*(vd2-vd1))
Id1=Id1Comp-Id1Ion
######################

######################
#### init values #####
init vd1=-70
######################
#done
# ---- dend2.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

##### Dendrite 2 #####
## length = 1366.26402
d2Len=754.842*1.81*10^(-4)
d2Diam=36.4297*10^(-4)
d2Area=Area(d2Len,d2Diam)
d2CArea=CArea(d2Diam)
d2GPas=1/11000
d2EPas=-70

### Ion Channels ####
#####################################
# ---- dend2_CaDen.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

###### CaD2en ######
# CaD2en ###
## L Type Channels ###
CaD2_gb=CaDen_Max
CaD2_e=60
CaD2_thtm=-43
CaD2_kapm=-6
CaD2_Ot=10
CaD2_Ot2=50
CaD2_Wt_d=1200
CaD2_tilon=1
CaD2_AranG=0.5
CaD2_WG=1
CaD2_Wth=0.27

## Ca activate K Channels ###
CaD2_gkb=CaDen_Max*0.41
CaD2_nexp=10
CaD2_kd=0.0005
CaD2_St=40

## Calcium Dynamics ###
CaD2_caio=0.0001
CaD2_f=0.01
CaD2_alpha=1
CaD2_kca=8
CaD2_ek=-80
##############
CaD2_Of=1/(1+expmod((vd2-CaD2_thtm)/CaD2_kapm))
CaD2_Wf=1/(1+expmod(-(vd2+57)/0.8))
CaD2_Wt=50+(1150/CaD2_WG)/(1+expmod((vd2+32)/7))
CaD2_Sf=(1/((CaD2_kd/(CaD2_cai-0.00001))^CaD2_nexp+1))
CaD2_df=d_Flag(CaD2_Of-CaD2_O)
tRandG2=0
CaD2_tauC=(CaD2_Wt_d*(1-(0.76*tRandG2)))-CaD2_Wt
CaD2_Wt2=CaD2_tauC*CaD2_df
#######################

######################
##### Currents #######
CaD2_g=CaD2_gb*((CaD2_O)*(CaD2_AranG*0.3+1))
CaD2_gkca=CaD2_S
CaD2_gk=CaD2_gkb*CaD2_gkca

Id2CaD2Ca=CaD2_g*(vd2-CaD2_e)
Id2CaD2K=CaD2_gk*(vd2-CaD2_ek)
Id2CaD2=Id2CaD2Ca+Id2CaD2K
######################

######################
##### equations ######
dCaD2_O/dt=(CaD2_Of-CaD2_O)*tauFunc(CaD2_tilon,CaD2_W,CaD2_df,CaD2_Wth)/(CaD2_Ot+CaD2_Ot2*CaD2_df)
dCaD2_W/dt=((CaD2_Wf*(1-CaD2_df))-CaD2_W)/(CaD2_Wt+CaD2_Wt2)
dCaD2_S/dt=(CaD2_Sf-CaD2_S)/CaD2_St
dCaD2_cai/dt=CaD2_f*(-(CaD2_alpha*(Id2CaD2Ca))-(CaD2_kca*CaD2_cai))
######################

######################
#### init values #####
init CaD2_O=0.0109869, CaD2_W=8.76425e-8, CaD2_cai=0.0001, CaD2_S=0
######################
#done
######################

######################
##### Currents #######
Id2L=d2GPas*(vd2-d2EPas)
Id2Ion=Id2L+Id2CaD2
Id2Comp=1/d2Area*(G_d1_d2*(vd1-vd2)+G_d2_d3*(vd3-vd2))
Id2=Id2Comp-Id2Ion

######################
### state equations ####
######################

######################
#### init values #####
init vd2=-70
######################

#done
# ---- dend3.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

##### Dendrite 3 #####
## length = 1878.6171
d3Len=1037.91*1.81*10^(-4)
d3Diam=10.1901*10^(-4)
d3Area=Area(d3Len,d3Diam)
d3CArea=CArea(d3Diam)
d3GPas=1/11000
d3EPas=-70

##### Ion Channels ####
######################
# ---- dend3_CaDen.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

####### CaD3en ######
## CaD3en ###
### L Type Channels ###
CaD3_gb=CaDen_Max*0.25
CaD3_e=60
CaD3_thtm=-43
CaD3_kapm=-6
CaD3_Ot=10
CaD3_Ot2=50
CaD3_Wt_d=1200
CaD3_tilon=1
CaD3_AranG=0.5
CaD3_WG=1
CaD3_Wth=0.27

## Ca activate K Channels ###
CaD3_gkb=CaDen_Max*0.41*0.25
CaD3_nexp=10
CaD3_kd=0.0005
CaD3_St=40

## Calcium Dynamics ###
CaD3_caio=0.0001
CaD3_f=0.01
CaD3_alpha=1
CaD3_kca=8
CaD3_ek=-80
##############
CaD3_Of=1/(1+expmod((vd3-CaD3_thtm)/CaD3_kapm))
CaD3_Wf=1/(1+expmod(-(vd3+57)/0.8))
CaD3_Wt=50+(1150/CaD3_WG)/(1+expmod((vd3+32)/7))
CaD3_Sf=(1/((CaD3_kd/(CaD3_cai-0.00001))^CaD3_nexp+1))
CaD3_df=d_Flag(CaD3_Of-CaD3_O)
tRandG3=0
CaD3_tauC=(CaD3_Wt_d*(1-(0.76*tRandG3)))-CaD3_Wt
CaD3_Wt2=CaD3_tauC*CaD3_df
######################

######################
##### Currents #######
CaD3_g=CaD3_gb*((CaD3_O)*(CaD3_AranG*0.3+1))
CaD3_gkca=CaD3_S
CaD3_gk=CaD3_gkb*CaD3_gkca

Id3CaD3Ca=CaD3_g*(vd3-CaD3_e)
Id3CaD3K=CaD3_gk*(vd3-CaD3_ek)
Id3CaD3=Id3CaD3Ca+Id3CaD3K
######################


######################
##### state equations ####
dCaD3_O/dt=(CaD3_Of-CaD3_O)*tauFunc(CaD3_tilon,CaD3_W,CaD3_df,CaD3_Wth)/(CaD3_Ot+CaD3_Ot2*CaD3_df)
dCaD3_W/dt=((CaD3_Wf*(1-CaD3_df))-CaD3_W)/(CaD3_Wt+CaD3_Wt2)
dCaD3_S/dt=(CaD3_Sf-CaD3_S)/CaD3_St
dCaD3_cai/dt=CaD3_f*(-(CaD3_alpha*(Id3CaD3Ca))-(CaD3_kca*CaD3_cai))
######################

######################
#### init values #####
init CaD3_O=0.0109869, CaD3_W=8.76425e-8, CaD3_cai=0.0001, CaD3_S=0
######################

#done
######################

######################
##### Currents #######
Id3L=d3GPas*(vd3-d3EPas)
Id3Ion=Id3L+Id3CaD3
Id3Comp=1/d3Area*(G_d2_d3*(vd2-vd3))
Id3=Id3Comp-Id3Ion
######################

######################
##### state equations ####
######################

######################
#### init values #####
init vd3=-70
######################
#done
# ---- conn.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##


#### Connect Compartments ###
R_S_Ah=Ra*(0.5*sLen/sCArea+0.5*ahLen/ahCArea)
G_S_Ah=1/R_S_Ah

R_S_d0=Ra*(0.5*d0Len/d0CArea)
G_S_d0=1/R_S_d0

R_d0_d1=Ra*(0.5*d0Len/d0CArea+0.5*d1Len/d1CArea)
G_d0_d1=1/R_d0_d1

R_d1_d2=Ra*(0.5*d1Len/d1CArea+0.5*d2Len/d2CArea)
G_d1_d2=1/R_d1_d2

R_d2_d3=Ra*(0.5*d2Len/d2CArea+0.5*d3Len/d3CArea)
G_d2_d3=1/R_d2_d3

#done
# ---- opt.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##

@ xlo=0,xhi=4000,ylo=-90,yhi=50
@ dt=0.025
@ but=fit:wf
@ but=int:ig
@ but=intl:il
@ but=auto:fa
@ OUTPUT=output.dat
@ meth=backeul
@ total=4000
@ parmax=1, parmin=-10, AUTOXMIN=-0.1, AUTOXMAX=1.1, AUTOYMIN=-90, AUTOYMAX=20
@ NPR=100000, NMAX=10000000
@ NTST=100
@ DSMAX=0.1

# increaseing parmax, NTST, can solve MX problem
# increasing NORMMAX, NMAX can solve EP 

#done
# ---- stim.inc ----
## ********************************************************** ##
# Author:       Muhammad Moustafa
# Email:        muhammadmoustafa@eng1.cu.edu.eg
# Affiliation:  Systems and Biomedical Engineering Department
#               Faculty of Engineering
#               Cairo University
## ********************************************************** ##



# bifurcation max value
# Note: setting maxAmp below 50 causes max out in bifurcation, 2000 is good, NTST=100
## stimulus current in nA, 10^-6 is the conversion factor to nA
maxAmp=50
I=ampPar*maxAmp*10^(-6)
@ total=200
@ xhi=200

#done

# W269 (#326): the README's step 2, integrate 600 ms to the steady state (stim.inc sets 200)
@ total=600
done
