# Izhikevich's simple model of a spiking neuron: thalamo-cortical (TC), depolarized start.
# Izhikevich E.M. (2003) Simple model of spiking neurons. IEEE Trans. Neural Networks 14(6):1569-1572, Fig. 2, TC, left trace, starts at v=-63.
#   v' = 0.04 v^2 + 5 v + 140 - u + I,  u' = a (b v - u);
#   when v reaches 30 mV, v is set to c and u to u + d (the global event).
# Input: starts at -63 mV; step of current I0=10 at t=T1=10.
# n counts the spikes and ts is the time of the last one, both set where the reset is (bounds is raised: ts is a time,
# which the default bound of 100 would stop).
par a=0.02, b=0.25, c=-65, d=0.05
par I0=10, T1=10
init v=-63, u=-15.75, n=0, ts=0
I = I0*heav(t-T1)
v' = 0.04*v^2+5*v+140-u+I
u' = a*(b*v-u)
n' = 0
ts' = 0
global 1 v-30 {v=c; u=u+d; n=n+1; ts=t}
aux I = I
@ total=150, dt=0.025, nout=10, bounds=1000000
done
