# Izhikevich's simple model of a spiking neuron: class 1 excitable.
# Izhikevich E.M. (2004) Which model to use for cortical spiking neurons? IEEE Trans. Neural Networks 15(5):1063-1070, Fig. 1, panel G.
#   v' = 0.04 v^2 + 4.1 v + 108 - u + I,  u' = a (b v - u);
#   when v reaches 30 mV, v is set to c and u to u + d (the global event).
# Input: ramp of current with slope r=0.075 from t=T1=30 (the v equation has 4.1 v + 108).
# n counts the spikes and ts is the time of the last one, both set where the reset is (bounds is raised: ts is a time,
# which the default bound of 100 would stop).
par a=0.02, b=-0.1, c=-55, d=6
par r=0.075, T1=30
init v=-60, u=6, n=0, ts=0
I = r*(t-T1)*heav(t-T1)
v' = 0.04*v^2+4.1*v+108-u+I
u' = a*(b*v-u)
n' = 0
ts' = 0
global 1 v-30 {v=c; u=u+d; n=n+1; ts=t}
aux I = I
@ total=300, dt=0.025, nout=10, bounds=1000000
done
